PsychoPy2experiment version="1.81.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = main
  Units = use prefs
  Screen = 1
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Routines
  Routine instruction_1
    CodeComponent code_1
      Begin Experiment:
        import codecs, os
        import utils.CreateStimuli as CS

        def open_codecs(filename):
            return codecs.open(os.path.realpath(filename), encoding='utf-8')

        create_stimuli = CS.CreateStimuli()
    TextComponent text_1
      text = $open_codecs('instructions/first-part.txt').read()
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_response_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction_2
    TextComponent text_2
      text = $open_codecs('instructions/second-part.txt').read()
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Begin Routine:
        import utils.CreateStimuli as CS

        create_stimuli.createStoriesFromResponse(response1_file)
  Routine argument_2
    TextComponent text_4
      text [set every repeat] = $sentence
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine argument
    TextComponent argument_1
      text [set every repeat] = $sentence
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation_point
    TextComponent text_3
      color = red
      text [set every repeat] = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine response_2
    TextComponent text
      text = vero (1)      false(0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = '1','0'
      startVal [time (s)] = 0.0
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  Routine response_1
    TextComponent response1
      text [set every repeat] = $targetWordP + "    " + $targetWordN
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_1
      correctAns = $record_answer()
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1', '0'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        uui_check = 0
        response1_file = 'data/responses1.out'

        if os.path.isfile(response1_file):
            os.remove(response1_file)

        def record_answer():
            global uui_check, response1_file
            ouptup_file = open(response1_file, 'a')
            if uui_check == uid :
                return;
            else:
                uui_check = uid
            try:
                _string = str(uid) + ',' + str(key_resp_1.keys) + '\n'
                ouptup_file.write(_string)
            finally:
                ouptup_file.close()
Flow
  Routine instruction_1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/stories1.out.csv
    loopType = sequential
    nReps = 1
    Selected rows = 0:5
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    conditions:
      [{'targetWordP': u'APPETITOSO', 'sentenceBlock': u'PB', 'context': u'P', 'contextId': 1, 'gender': u'F', 'sentence': u'Maria adora la cucina italiana. Sua madre ha preparato un piatto di spaghetti al sugo per cena. Maria dice : \u201c\xc8 cos\xec ________\u201d ', 'targetWordN': u'DISGUSTOSO', 'mark': False},
      {'targetWordP': u'APPETITOSO', 'sentenceBlock': u'PB', 'context': u'N', 'contextId': 1, 'gender': u'F', 'sentence': u'Maria odia la cucina a base di pesce. Sua madre ha preparato del salmone norvegese per cena. Maria dice : \u201c\xc8 cos\xec ________\u201d ', 'targetWordN': u'DISGUSTOSO', 'mark': False}]
    Routine fixation_point
    Routine argument
    Routine response_1
  LoopTerminator trials
  Routine instruction_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stimuli/stories1.csv
    loopType = random
    nReps = 1
    Selected rows = 0
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    conditions:
      [{'targetWordP': u'APPETITOSO', 'sentenceBlock': u'PB', 'context': u'N', 'contextId': 1, 'gender': u'F', 'sentence': u'Maria odia la cucina a base di pesce. Sua madre ha preparato del salmone norvegese per cena. Maria dice : \u201c\xc8 cos\xec ________\u201d ', 'targetWordN': u'DISGUSTOSO', 'mark': False},
      {'targetWordP': u'APPETITOSO', 'sentenceBlock': u'PB', 'context': u'P', 'contextId': 1, 'gender': u'F', 'sentence': u'Maria adora la cucina italiana. Sua madre ha preparato un piatto di spaghetti al sugo per cena. Maria dice : \u201c\xc8 cos\xec ________\u201d ', 'targetWordN': u'DISGUSTOSO', 'mark': False},
      {'targetWordP': u'SPIGLIATA', 'sentenceBlock': u'PB', 'context': u'N', 'contextId': 2, 'gender': u'M', 'sentence': u'Giuseppe e Elisabetta sono andati a ballare. Elisabetta \xe8 caduta 6 volte. Giuseppe dice: \u201cSei cos\xec _________\u201d', 'targetWordN': u'IMBRANATA', 'mark': False},
      {'targetWordP': u'SPIGLIATA', 'sentenceBlock': u'PB', 'context': u'P', 'contextId': 2, 'gender': u'M', 'sentence': u'Giuseppe e Elisabetta sono andati a ballare. Elisabetta ha fatto 6 piroette. Giuseppe dice: \u201cSei cos\xec _________\u201d', 'targetWordN': u'IMBRANATA', 'mark': False},
      {'targetWordP': u'BOLLENTE', 'sentenceBlock': u'T', 'context': u'N', 'contextId': 1, 'gender': u'M', 'sentence': u'Giuseppe e Francesco vogliono nuotare. Sfortunatamente la temperatura dell\u2019acqua \xe8 di 10C. Giuseppe dice : \u201c\xc8 davvero _____ \u201d ', 'targetWordN': u'GLACIALE', 'mark': False}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
    Routine fixation_point
    Routine argument_2
    Routine response_2
  LoopTerminator trials_2
